<PlusConfiguration version="2.4">

  <DataCollection StartupDelaySec="5.0">
    <DeviceSet 
      Name="PlusServer: Interson USB ultrasound device with Interson SDK, RF."
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice"
      Type="IntersonArraySDKCxxVideo" 
      RfDecimation="1"
      PulseVoltage="40"
      FrequencyMhz="5.0" >
      <DataSources>
        <DataSource Type="Video" Id="BmodeVideo" PortName="B" PortUsImageOrientation="UF" AveragedItemsForFiltering="1"/>
        <DataSource Type="Video" Id="RfVideo" PortName="Rf" PortUsImageOrientation="FM" AveragedItemsForFiltering="1"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="BmodeVideoStream" VideoDataSourceId="BmodeVideo">
          <RfProcessing>
            <RfToBrightnessConversion 
              NumberOfHilbertFilterCoeffs="32.0" 
              BrightnessScale="20.0" />
            <ScanConversion 
              TransducerName="Linear 7.5MHz"
              TransducerGeometry="LINEAR"
              RadiusStartMm="70.0"
              RadiusStopMm="175.1"
              ThetaStartDeg="-45.0"
              ThetaStopDeg="45.0"
              OutputImageSizePixel="127 1024"
              TransducerCenterPixel="64 512"
              OutputImageSpacingMmPerPixel="0.10 0.10" /> 
          </RfProcessing>
        </OutputChannel>
        <OutputChannel Id="RfVideoStream" VideoDataSourceId="RfVideo" />
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="IntersonRf.mha"
      EnableCapturingOnStart="TRUE" >
      <InputChannels>
        <InputChannel Id="RfVideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="250" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="RfVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
